/gate/world/geometry/setXLength 3500.0 mm
/gate/world/geometry/setYLength 3500.0 mm
/gate/world/geometry/setZLength 3500.0 mm
/gate/world/placement/setTranslation 0 0 0 mm
/gate/world/vis/setVisible false

/gate/world/daughters/name phantom
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert box
/gate/phantom/geometry/setXLength 1650.0 mm
/gate/phantom/geometry/setYLength 1650.0 mm
/gate/phantom/geometry/setZLength 100. mm
/gate/phantom/placement/setTranslation 0 0 -52. mm
/gate/phantom/vis/setVisible false

/gate/phantom/daughters/name degrader
/gate/phantom/daughters/insert sphere
/gate/degrader/geometry/setRmin 0 mm
/gate/degrader/geometry/setRmax 50 mm
/gate/degrader/geometry/setPhiStart 0 rad
/gate/degrader/geometry/setDeltaPhi 2PI rad
/gate/degrader/geometry/setThetaStart 0 rad
/gate/degrader/geometry/setDeltaTheta 2PI rad
/gate/degrader/placement/setTranslation 0 0 0 mm
/gate/degrader/setMaterial Water
/gate/degrader/vis/setVisible true

/gate/world/daughters/name scanner_1
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert box
/gate/scanner_1/geometry/setXLength 270.0 mm
/gate/scanner_1/geometry/setYLength 135.0 mm
/gate/scanner_1/geometry/setZLength 2.624 mm
/gate/scanner_1/placement/setTranslation 0 0 1.312 mm
/gate/scanner_1/vis/setVisible false

/gate/world/daughters/name scanner_2
/gate/world/daughters/systemType scanner
/gate/world/daughters/insert box
/gate/scanner_2/geometry/setXLength 270.0 mm
/gate/scanner_2/geometry/setYLength 135.0 mm
/gate/scanner_2/geometry/setZLength 787.2 mm
/gate/scanner_2/placement/setTranslation 0 0 396.224 mm
/gate/scanner_2/vis/setVisible false

/gate/scanner_1/daughters/name FM_Layer
/gate/scanner_1/daughters/insert box
/gate/FM_Layer/geometry/setXLength 270.0 mm
/gate/FM_Layer/geometry/setYLength 135.0 mm
/gate/FM_Layer/geometry/setZLength 2.624 mm
/gate/FM_Layer/placement/setTranslation 0 0 0 mm
/gate/FM_Layer/vis/setVisible false

/gate/FM_Layer/daughters/name FirstModule
/gate/FM_Layer/daughters/insert box
/gate/FirstModule/geometry/setXLength 270.0 mm
/gate/FirstModule/geometry/setYLength 135.0 mm
/gate/FirstModule/geometry/setZLength 0.37395 mm
/gate/FirstModule/placement/setTranslation 0 0 -1.125 mm
/gate/FirstModule/vis/setVisible false

/gate/FirstModule/daughters/name FM_ActiveChip
/gate/FirstModule/daughters/insert box
/gate/FM_ActiveChip/geometry/setXLength 270.0 mm
/gate/FM_ActiveChip/geometry/setYLength 135.0 mm
/gate/FM_ActiveChip/geometry/setZLength 0.0139 mm
/gate/FM_ActiveChip/placement/setTranslation 0 0 -0.18 mm
/gate/FM_ActiveChip/setMaterial Silicon
/gate/FM_ActiveChip/vis/setColor red

/gate/FirstModule/daughters/name FM_Kapton
/gate/FirstModule/daughters/insert box
/gate/FM_Kapton/geometry/setXLength 270.0 mm
/gate/FM_Kapton/geometry/setYLength 135.0 mm
/gate/FM_Kapton/geometry/setZLength 0.1399 mm
/gate/FM_Kapton/placement/setTranslation 0 0 -0.103 mm
/gate/FM_Kapton/setMaterial Kapton
/gate/FM_Kapton/vis/setColor green

/gate/FirstModule/daughters/name FM_AlCable
/gate/FirstModule/daughters/insert box
/gate/FM_AlCable/geometry/setXLength 270.0 mm
/gate/FM_AlCable/geometry/setYLength 135.0 mm
/gate/FM_AlCable/geometry/setZLength 0.1499 mm
/gate/FM_AlCable/placement/setTranslation 0 0 0.042 mm
/gate/FM_AlCable/setMaterial Silicon
/gate/FM_AlCable/vis/setColor blue

/gate/FirstModule/daughters/name FM_KaptonGlue
/gate/FirstModule/daughters/insert box
/gate/FM_KaptonGlue/geometry/setXLength 270.0 mm
/gate/FM_KaptonGlue/geometry/setYLength 135.0 mm
/gate/FM_KaptonGlue/geometry/setZLength 0.0349 mm
/gate/FM_KaptonGlue/placement/setTranslation 0 0 0.1345 mm
/gate/FM_KaptonGlue/setMaterial Glue
/gate/FM_KaptonGlue/vis/setColor yellow

/gate/FirstModule/daughters/name FM_ChipGlue
/gate/FirstModule/daughters/insert box
/gate/FM_ChipGlue/geometry/setXLength 270.0 mm
/gate/FM_ChipGlue/geometry/setYLength 135.0 mm
/gate/FM_ChipGlue/geometry/setZLength 0.0349 mm
/gate/FM_ChipGlue/placement/setTranslation 0 0 0.1695 mm
/gate/FM_ChipGlue/setMaterial Glue
/gate/FM_ChipGlue/vis/setColor yellow

/gate/FM_Layer/daughters/name FM_Absorber1
/gate/FM_Layer/daughters/insert box
/gate/FM_Absorber1/geometry/setXLength 270.0 mm
/gate/FM_Absorber1/geometry/setYLength 135.0 mm
/gate/FM_Absorber1/geometry/setZLength 1.9999 mm
/gate/FM_Absorber1/placement/setTranslation 0 0 0.062 mm
/gate/FM_Absorber1/setMaterial Air
/gate/FM_Absorber1/vis/setColor grey

/gate/FM_Layer/daughters/name FM_AbsorberAirGap
/gate/FM_Layer/daughters/insert box
/gate/FM_AbsorberAirGap/geometry/setXLength 270.0 mm
/gate/FM_AbsorberAirGap/geometry/setYLength 135.0 mm
/gate/FM_AbsorberAirGap/geometry/setZLength 0.2499 mm
/gate/FM_AbsorberAirGap/placement/setTranslation 0 0 1.187 mm
/gate/FM_AbsorberAirGap/setMaterial Air
/gate/FM_AbsorberAirGap/vis/setVisible false

/gate/scanner_2/daughters/name Layer
/gate/scanner_2/daughters/insert box
/gate/Layer/geometry/setXLength 270.0 mm
/gate/Layer/geometry/setYLength 135.0 mm
/gate/Layer/geometry/setZLength 2.624 mm
/gate/Layer/placement/setTranslation 0 0 -392.288 mm
/gate/Layer/vis/setVisible false

/gate/Layer/daughters/name Module
/gate/Layer/daughters/insert box
/gate/Module/geometry/setXLength 270.0 mm
/gate/Module/geometry/setYLength 135.0 mm
/gate/Module/geometry/setZLength 0.37395 mm
/gate/Module/placement/setTranslation 0 0 -1.125 mm
/gate/Module/vis/setVisible false

/gate/Module/daughters/name ActiveChip
/gate/Module/daughters/insert box
/gate/ActiveChip/geometry/setXLength 270.0 mm
/gate/ActiveChip/geometry/setYLength 135.0 mm
/gate/ActiveChip/geometry/setZLength 0.0139 mm
/gate/ActiveChip/placement/setTranslation 0 0 -0.18 mm
/gate/ActiveChip/setMaterial Silicon
/gate/ActiveChip/vis/setColor red

/gate/Module/daughters/name Kapton
/gate/Module/daughters/insert box
/gate/Kapton/geometry/setXLength 270.0 mm
/gate/Kapton/geometry/setYLength 135.0 mm
/gate/Kapton/geometry/setZLength 0.1399 mm
/gate/Kapton/placement/setTranslation 0 0 -0.103 mm
/gate/Kapton/setMaterial Kapton
/gate/Kapton/vis/setColor green

/gate/Module/daughters/name AlCable
/gate/Module/daughters/insert box
/gate/AlCable/geometry/setXLength 270.0 mm
/gate/AlCable/geometry/setYLength 135.0 mm
/gate/AlCable/geometry/setZLength 0.1499 mm
/gate/AlCable/placement/setTranslation 0 0 0.042 mm
/gate/AlCable/setMaterial Silicon
/gate/AlCable/vis/setColor blue

/gate/Module/daughters/name KaptonGlue
/gate/Module/daughters/insert box
/gate/KaptonGlue/geometry/setXLength 270.0 mm
/gate/KaptonGlue/geometry/setYLength 135.0 mm
/gate/KaptonGlue/geometry/setZLength 0.0349 mm
/gate/KaptonGlue/placement/setTranslation 0 0 0.1345 mm
/gate/KaptonGlue/setMaterial Glue
/gate/KaptonGlue/vis/setColor yellow

/gate/Module/daughters/name ChipGlue
/gate/Module/daughters/insert box
/gate/ChipGlue/geometry/setXLength 270.0 mm
/gate/ChipGlue/geometry/setYLength 135.0 mm
/gate/ChipGlue/geometry/setZLength 0.0349 mm
/gate/ChipGlue/placement/setTranslation 0 0 0.1695 mm
/gate/ChipGlue/setMaterial Glue
/gate/ChipGlue/vis/setColor yellow

/gate/Layer/daughters/name Absorber1
/gate/Layer/daughters/insert box
/gate/Absorber1/geometry/setXLength 270.0 mm
/gate/Absorber1/geometry/setYLength 135.0 mm
/gate/Absorber1/geometry/setZLength 1.9999 mm
/gate/Absorber1/placement/setTranslation 0 0 0.062 mm
/gate/Absorber1/setMaterial Aluminium
/gate/Absorber1/vis/setColor grey

/gate/Layer/daughters/name AbsorberAirGap
/gate/Layer/daughters/insert box
/gate/AbsorberAirGap/geometry/setXLength 270.0 mm
/gate/AbsorberAirGap/geometry/setYLength 135.0 mm
/gate/AbsorberAirGap/geometry/setZLength 0.2499 mm
/gate/AbsorberAirGap/placement/setTranslation 0 0 1.187 mm
/gate/AbsorberAirGap/setMaterial Air
/gate/AbsorberAirGap/vis/setVisible false

/gate/Layer/repeaters/insert linear
/gate/Layer/linear/autoCenter false
/gate/Layer/linear/setRepeatNumber 150
/gate/Layer/linear/setRepeatVector 0 0 2.624 mm

