#/gate/degrader/attachCrystalSD
/gate/TRACKER_Absorber1/attachCrystalSD
/gate/TRACKER_Absorber2/attachCrystalSD
/gate/TRACKER_Glue1/attachCrystalSD
/gate/TRACKER_ALPIDEFront/attachCrystalSD
/gate/TRACKER_ALPIDEEpi/attachCrystalSD
/gate/TRACKER_ALPIDESub/attachCrystalSD
/gate/TRACKER_AirGap1/attachCrystalSD
/gate/TRACKER_AirGap2/attachCrystalSD
/gate/TRACKER_TopFDI1/attachCrystalSD
/gate/TRACKER_TopFDI2/attachCrystalSD
/gate/TRACKER_CableFDI1/attachCrystalSD
/gate/TRACKER_CableFDI2/attachCrystalSD
/gate/TRACKER_Glue2/attachCrystalSD
/gate/TRACKER_Spacer/attachCrystalSD
/gate/TRACKER_Glue3/attachCrystalSD
/gate/TRACKER_BottomFDI1/attachCrystalSD
/gate/TRACKER_BottomFDI2/attachCrystalSD
/gate/TRACKER_Glue4/attachCrystalSD
/gate/Layer/attachCrystalSD
/gate/Absorber/attachCrystalSD
/gate/Glue1/attachCrystalSD
/gate/Glue2/attachCrystalSD
/gate/ALPIDEFront/attachCrystalSD
/gate/ALPIDEEpi/attachCrystalSD
/gate/ALPIDESub/attachCrystalSD
/gate/AirGap/attachCrystalSD
/gate/TopFDI1/attachCrystalSD
/gate/TopFDI2/attachCrystalSD
/gate/Glue3/attachCrystalSD
/gate/CableFDI1/attachCrystalSD
/gate/CableFDI2/attachCrystalSD
/gate/Spacer2/attachCrystalSD
/gate/Glue4/attachCrystalSD
/gate/BottomFDI1/attachCrystalSD
/gate/BottomFDI2/attachCrystalSD
/gate/Glue5/attachCrystalSD
