/gate/geometry/setMaterialDatabase GateMaterials.db

/gate/world/geometry/setXLength 1000. cm
/gate/world/geometry/setYLength 1000. cm
/gate/world/geometry/setZLength 1000. cm

/gate/world/daughters/name scanner
/gate/world/daughters/insert box
/gate/scanner/geometry/setXLength 500. cm
/gate/scanner/geometry/setYLength 500. cm
/gate/scanner/geometry/setZLength 500. cm
/gate/scanner/placement/setTranslation 0 0 0. cm
/gate/scanner/vis/forceWireframe

/gate/scanner/daughters/name fronttracker
/gate/scanner/daughters/insert box
/gate/fronttracker/geometry/setXLength 100. cm
/gate/fronttracker/geometry/setYLength 100. cm
/gate/fronttracker/geometry/setZLength 0.001 mm
/gate/fronttracker/placement/setTranslation 0 0 -120. mm
/gate/fronttracker/setMaterial Air

/gate/fronttracker/repeaters/insert linear
/gate/fronttracker/linear/autoCenter false
/gate/fronttracker/linear/setRepeatNumber 2
/gate/fronttracker/linear/setRepeatVector 0 0 10. mm

/gate/scanner/daughters/name backtracker
/gate/scanner/daughters/insert box
/gate/backtracker/geometry/setXLength 100. cm
/gate/backtracker/geometry/setYLength 100. cm
/gate/backtracker/geometry/setZLength 0.001 mm
/gate/backtracker/placement/setTranslation 0 0 110. mm
/gate/backtracker/setMaterial Air

/gate/backtracker/repeaters/insert linear
/gate/backtracker/linear/autoCenter false
/gate/backtracker/linear/setRepeatNumber 2
/gate/backtracker/linear/setRepeatVector 0 0 10. mm

/gate/scanner/daughters/name phantom
/gate/scanner/daughters/insert box
/gate/phantom/geometry/setXLength 100. cm
/gate/phantom/geometry/setYLength 100. cm
/gate/phantom/geometry/setZLength 20.  cm
/gate/phantom/placement/setTranslation 0 0 0 mm
/gate/phantom/setMaterial Water
/gate/phantom/vis/forceWireframe

/gate/scanner/daughters/name calorimeter
/gate/scanner/daughters/insert box
/gate/calorimeter/geometry/setXLength 200. cm
/gate/calorimeter/geometry/setYLength 200. cm
/gate/calorimeter/geometry/setZLength 200. cm
/gate/calorimeter/placement/setTranslation 0 0 125. cm
/gate/calorimeter/setMaterial Tungsten

/gate/phantom/attachCrystalSD
/gate/fronttracker/attachCrystalSD
/gate/backtracker/attachCrystalSD
/gate/calorimeter/attachCrystalSD

/gate/physics/addPhysicsList QGSP_BIC_EMZ
/gate/geometry/setIonisationPotential Water 75 eV


/gate/physics/SetMaxStepSizeInRegion phantom 1 mm

/gate/run/initialize

/process/inactivate hadElastic
/process/inactivate protonInelastic

/gate/source/addSource PBS PencilBeam
/gate/source/PBS/setParticleType proton
/gate/source/PBS/setEnergy 230. MeV
/gate/source/PBS/setSigmaEnergy 0. MeV
/gate/source/PBS/setPosition 0 0 -20. cm
/gate/source/PBS/setSigmaX 2.5 mm
/gate/source/PBS/setSigmaY 2.5 mm
/gate/source/PBS/setSigmaTheta 3 mrad
/gate/source/PBS/setSigmaPhi 3 mrad
/gate/source/PBS/setEllipseXThetaEmittance 15 mm*mrad
/gate/source/PBS/setEllipseXThetaRotationNorm negative
/gate/source/PBS/setEllipseYPhiEmittance 15 mm*mrad
/gate/source/PBS/setEllipseYPhiRotationNorm negative
/gate/application/setTotalNumberOfPrimaries 50000

/gate/output/root/enable
/gate/output/root/setRootSinglesFlag 0
/gate/output/root/setFileName simpleScanner

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto
/gate/application/start
