#/vis/open OGLSX
#/vis/viewer/reset
#/vis/viewer/set/viewpointThetaPhi 60 60
#/vis/viewer/zoom 10
#/vis/viewer/set/style surface
#/vis/drawVolume
#/tracking/storeTrajectory 1
#/vis/scene/endOfEventAction accumulate
#/vis/viewer/update

/gate/geometry/setMaterialDatabase GateMaterials.db

/gate/world/geometry/setXLength 1000. cm
/gate/world/geometry/setYLength 1000. cm
/gate/world/geometry/setZLength 1000. cm

/gate/world/daughters/name scanner
/gate/world/daughters/insert box
/gate/scanner/geometry/setXLength 100. cm
/gate/scanner/geometry/setYLength 100. cm
/gate/scanner/geometry/setZLength 100. cm
/gate/scanner/placement/setTranslation 0 0 50. cm
/gate/scanner/vis/forceWireframe

/gate/scanner/daughters/name phantom
/gate/scanner/daughters/insert box
/gate/phantom/geometry/setXLength 100. cm
/gate/phantom/geometry/setYLength 100. cm
/gate/phantom/geometry/setZLength 20. cm
/gate/phantom/placement/setTranslation 0 0 -40. cm
/gate/phantom/setMaterial Water
/gate/phantom/vis/forceWireframe

/gate/scanner/daughters/name phantom2
/gate/scanner/daughters/insert box
/gate/phantom2/geometry/setXLength 100. cm
/gate/phantom2/geometry/setYLength 100. cm
/gate/phantom2/geometry/setZLength 80. cm
/gate/phantom2/placement/setTranslation 0 0 10. cm
/gate/phantom2/setMaterial Aluminium
/gate/phantom2/vis/forceWireframe

/gate/world/daughters/name esaVolume
/gate/world/daughters/insert box
/gate/esaVolume/geometry/setXLength 100. cm
/gate/esaVolume/geometry/setYLength 100. cm
/gate/esaVolume/geometry/setZLength 10. um
/gate/esaVolume/placement/setTranslation 0 0 51. cm
/gate/esaVolume/setMaterial Air

/gate/phantom/attachCrystalSD
/gate/phantom2/attachCrystalSD

#/gate/physics/addPhysicsList QGSP_BIC_EMZ
#/gate/physics/addPhysicsList QGSP_BIC_HP
/gate/physics/addPhysicsList QGSP_BIC_HP

#/gate/physics/SetMaxStepSizeInRegion world 2 mm
#/gate/physics/ActivateStepLimiter proton

/gate/geometry/setIonisationPotential Water 78 eV

#/gate/actor/addActor EnergySpectrumActor MyActor
#/gate/actor/MyActor/save ESA.root
#/gate/actor/MyActor/attachTo esaVolume
#/gate/actor/MyActor/energySpectrum/setEmin 0 eV
#/gate/actor/MyActor/energySpectrum/setEmax 1000 MeV
#/gate/actor/MyActor/energySpectrum/setNumberOfBins 1000

/gate/run/initialize

#/process/inactivate hadElastic
#/process/inactivate alphaInelastic
#/process/inactivate msc

#/gate/source/addSource PBS PencilBeam
#/gate/source/PBS/setParticleType proton
#/gate/source/PBS/setEnergy 250. MeV
#/gate/source/PBS/setSigmaEnergy 0. MeV
#/gate/source/PBS/setPosition 0 0 -10. mm
#/gate/source/PBS/setSigmaX 4 mm
#/gate/source/PBS/setSigmaY 2 mm
#/gate/source/PBS/setSigmaTheta 3.3 mrad
#/gate/source/PBS/setSigmaPhi 3.8 mrad
#/gate/source/PBS/setEllipseXThetaEmittance 15 mm*mrad
#/gate/source/PBS/setEllipseXThetaRotationNorm negative
#/gate/source/PBS/setEllipseYPhiEmittance 20 mm*mrad
#/gate/source/PBS/setEllipseYPhiRotationNorm negative

/gate/source/addSource PBS PencilBeam
##/gate/source/PBS/setParticleType proton
/gate/source/PBS/setParticleType GenericIon
/gate/source/PBS/setIonProperties 2 4 2 0
#/gate/source/PBS/setIonProperties 6 12 6 0
/gate/source/PBS/setEnergy 917 MeV
/gate/source/PBS/setSigmaEnergy 0. MeV
/gate/source/PBS/setPosition 0. 0. -10 mm
/gate/source/PBS/setSigmaX 3 mm
/gate/source/PBS/setSigmaY 3 mm
/gate/source/PBS/setSigmaTheta 2 mrad
/gate/source/PBS/setSigmaPhi 2 mrad
/gate/source/PBS/setEllipseXThetaEmittance 15 mm*mrad
/gate/source/PBS/setEllipseXThetaRotationNorm negative
/gate/source/PBS/setEllipseYPhiEmittance 15 mm*mrad
/gate/source/PBS/setEllipseYPhiRotationNorm negative
/gate/application/setTotalNumberOfPrimaries 50000

/gate/output/root/enable
/gate/output/root/setFileName output/waterphantom_Helium_Al_10k
/gate/output/root/setRootNtupleFlag 0
/gate/output/root/setRootSinglesFlag 0

/gate/random/setEngineName MersenneTwister
/gate/random/setEngineSeed auto
/gate/application/start
